# Generated by Configurator on Mon Jul 10 12:47:13 CST 2023

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,TUCam,TUCam,TUCam
Device,Spectra,LumencorSpectra,Spectra
Device,TIScope,NikonTI,TIScope
Device,TIEpiShutter,NikonTI,TIEpiShutter
Device,TIDiaLamp,NikonTI,TIDiaLamp
Device,TINosePiece,NikonTI,TINosePiece
Device,TICondenserCassette,NikonTI,TICondenserCassette
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus

# Pre-init settings for devices
Property,Spectra,Port,COM3
Property,Spectra,SetLE_Type,SpectraX

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references
Parent,TIEpiShutter,TIScope
Parent,TIDiaLamp,TIScope
Parent,TINosePiece,TIScope
Parent,TICondenserCassette,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,TUCam
Property,Core,Shutter,Spectra
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,4,5-Plan Apo 100x NA 1.45 Oil
Label,TINosePiece,3,4-S Plan Fluor 40x NA 0.60 Dry
Label,TINosePiece,2,3-Plan Apo 100x NA 1.45 Oil
Label,TINosePiece,1,2-Plan Fluor 4x NA 0.13 Dry
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TICondenserCassette
Label,TICondenserCassette,4,5-Ph3
Label,TICondenserCassette,3,4-Ph2
Label,TICondenserCassette,2,3-Ph1
Label,TICondenserCassette,1,2-PhL
Label,TICondenserCassette,0,1-A
# TIFilterBlock1
Label,TIFilterBlock1,5,6-59022
Label,TIFilterBlock1,4,5-D-F-T
Label,TIFilterBlock1,3,4-HqTRI
Label,TIFilterBlock1,2,3-TxRhq
Label,TIFilterBlock1,1,2-DAPI
Label,TIFilterBlock1,0,1------
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup


# Group: EternalTrigger
# Preset: 60X
ConfigGroup,EternalTrigger,60X,TUCam,Exposure,9.9990
ConfigGroup,EternalTrigger,60X,TUCam,Gain,HDR
ConfigGroup,EternalTrigger,60X,TUCam,Output Trigger Edge Mode,Rising
ConfigGroup,EternalTrigger,60X,TUCam,Output Trigger Kind,Global Exposure
ConfigGroup,EternalTrigger,60X,TUCam,Output Trigger Port,1
ConfigGroup,EternalTrigger,60X,TUCam,Temperature,-20
ConfigGroup,EternalTrigger,60X,TUCam,Trigger Exposure Mode,Width
ConfigGroup,EternalTrigger,60X,TUCam,Trigger Mode,Standard
ConfigGroup,EternalTrigger,60X,Spectra,Blue_Enable,0
ConfigGroup,EternalTrigger,60X,Spectra,Blue_Level,50
ConfigGroup,EternalTrigger,60X,Spectra,Cyan_Enable,0
ConfigGroup,EternalTrigger,60X,Spectra,Cyan_Level,50
ConfigGroup,EternalTrigger,60X,Spectra,Green_Enable,0
ConfigGroup,EternalTrigger,60X,Spectra,Green_Level,50
ConfigGroup,EternalTrigger,60X,Spectra,Red_Enable,0
ConfigGroup,EternalTrigger,60X,Spectra,Red_Level,50
ConfigGroup,EternalTrigger,60X,Spectra,State,0
ConfigGroup,EternalTrigger,60X,Spectra,Teal_Enable,0
ConfigGroup,EternalTrigger,60X,Spectra,Teal_Level,50
ConfigGroup,EternalTrigger,60X,Spectra,Violet_Enable,0
ConfigGroup,EternalTrigger,60X,Spectra,Violet_Level,50
ConfigGroup,EternalTrigger,60X,Spectra,White_Enable,0
ConfigGroup,EternalTrigger,60X,Spectra,White_Level,50
ConfigGroup,EternalTrigger,60X,TIEpiShutter,State,0
ConfigGroup,EternalTrigger,60X,TIDiaLamp,ComputerControl,On
ConfigGroup,EternalTrigger,60X,TIDiaLamp,Intensity,24
ConfigGroup,EternalTrigger,60X,TIDiaLamp,State,1
ConfigGroup,EternalTrigger,60X,TINosePiece,Label,6-Plan Apo 60x NA 1.40 Oil
ConfigGroup,EternalTrigger,60X,TINosePiece,State,5
ConfigGroup,EternalTrigger,60X,TIFilterBlock1,Label,6-59022
ConfigGroup,EternalTrigger,60X,TIFilterBlock1,State,5
ConfigGroup,EternalTrigger,60X,TICondenserCassette,Label,5-Ph3
ConfigGroup,EternalTrigger,60X,TICondenserCassette,State,4
ConfigGroup,EternalTrigger,60X,TILightPath,Label,2-Left100
ConfigGroup,EternalTrigger,60X,TILightPath,State,1



# PixelSize settings

