# Generated by Configurator on Sun Jul 24 14:14:56 CST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,EpiShutter,NikonTI,TIEpiShutter
Device,DiaLamp,NikonTI,TIDiaLamp
Device,NosePiece,NikonTI,TINosePiece
Device,CondenserCassette,NikonTI,TICondenserCassette
Device,FilterBlock1,NikonTI,TIFilterBlock1
Device,LightPath,NikonTI,TILightPath
Device,ZDrive,NikonTI,TIZDrive
Device,PFSOffset,NikonTI,TIPFSOffset
Device,PFSStatus,NikonTI,TIPFSStatus
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,Spectra,LumencorSpectra,Spectra

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,Spectra,Port,COM5
Property,Spectra,SetLE_Type,Spectra

# Pre-init settings for COM ports

# Hub (parent) references
Parent,EpiShutter,TIScope
Parent,DiaLamp,TIScope
Parent,NosePiece,TIScope
Parent,CondenserCassette,TIScope
Parent,FilterBlock1,TIScope
Parent,LightPath,TIScope
Parent,ZDrive,TIScope
Parent,PFSOffset,TIScope
Parent,PFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,PFSOffset
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# NosePiece
Label,NosePiece,5,6-Unknown
Label,NosePiece,4,5-Plan 40x NA 0.65 Dry
Label,NosePiece,3,4-Unknown
Label,NosePiece,2,3-Plan Apo 100x NA 1.45 Oil
Label,NosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,NosePiece,0,1-Plan Apo 60x NA 1.40 Oil
# CondenserCassette
Label,CondenserCassette,4,5-Ph3
Label,CondenserCassette,3,4-Ph2
Label,CondenserCassette,2,3-Ph1
Label,CondenserCassette,1,2-PhL
Label,CondenserCassette,0,1-A
# FilterBlock1
Label,FilterBlock1,5,6-RED
Label,FilterBlock1,4,5-YFPHQ
Label,FilterBlock1,3,4-HqTRI
Label,FilterBlock1,2,3-FITC
Label,FilterBlock1,1,2-DAPI
Label,FilterBlock1,0,1------
# LightPath
Label,LightPath,3,4-Left80
Label,LightPath,2,3-Right100
Label,LightPath,1,2-Left100
Label,LightPath,0,1-Eye100

# Configuration presets
# Group: BF
# Preset: 4X
ConfigGroup,BF,4X,EpiShutter,State,0
ConfigGroup,BF,4X,DiaLamp,Intensity,24
ConfigGroup,BF,4X,DiaLamp,State,1
ConfigGroup,BF,4X,NosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,BF,4X,NosePiece,State,1
ConfigGroup,BF,4X,CondenserCassette,Label,2-PhL
ConfigGroup,BF,4X,CondenserCassette,State,1
ConfigGroup,BF,4X,FilterBlock1,Label,6-RED
ConfigGroup,BF,4X,FilterBlock1,State,5
ConfigGroup,BF,4X,LightPath,Label,3-Right100
ConfigGroup,BF,4X,LightPath,State,2
ConfigGroup,BF,4X,ZDrive,Speed,1
ConfigGroup,BF,4X,PFSOffset,Position,-0.0250
ConfigGroup,BF,4X,PFSStatus,State,Off
ConfigGroup,BF,4X,HamamatsuHam_DCAM,Exposure,10.0040
ConfigGroup,BF,4X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,BF,4X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,BF,4X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],EXPOSURE
ConfigGroup,BF,4X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,BF,4X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,BF,4X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,BF,4X,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],READOUT END
ConfigGroup,BF,4X,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[1],READOUT END
ConfigGroup,BF,4X,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[2],READOUT END
ConfigGroup,BF,4X,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,BF,4X,HamamatsuHam_DCAM,TRIGGER ACTIVE,LEVEL
ConfigGroup,BF,4X,HamamatsuHam_DCAM,TRIGGER DELAY,0.0000
ConfigGroup,BF,4X,HamamatsuHam_DCAM,TRIGGER GLOBAL EXPOSURE,DELAYED
ConfigGroup,BF,4X,HamamatsuHam_DCAM,TRIGGER SOURCE,EXTERNAL
ConfigGroup,BF,4X,HamamatsuHam_DCAM,TRIGGER TIMES,1
ConfigGroup,BF,4X,HamamatsuHam_DCAM,Trigger,NORMAL
ConfigGroup,BF,4X,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE
ConfigGroup,BF,4X,Spectra,Blue_Enable,1
ConfigGroup,BF,4X,Spectra,Blue_Level,100
ConfigGroup,BF,4X,Spectra,Cyan_Enable,1
ConfigGroup,BF,4X,Spectra,Cyan_Level,100
ConfigGroup,BF,4X,Spectra,Green_Enable,1
ConfigGroup,BF,4X,Spectra,Green_Level,100
ConfigGroup,BF,4X,Spectra,Red_Enable,1
ConfigGroup,BF,4X,Spectra,Red_Level,100
ConfigGroup,BF,4X,Spectra,State,0
ConfigGroup,BF,4X,Spectra,Teal_Enable,1
ConfigGroup,BF,4X,Spectra,Teal_Level,100
ConfigGroup,BF,4X,Spectra,Violet_Enable,1
ConfigGroup,BF,4X,Spectra,Violet_Level,100
ConfigGroup,BF,4X,Spectra,White_Enable,1
ConfigGroup,BF,4X,Spectra,White_Level,100
ConfigGroup,BF,4X,Spectra,YG_Filter,1



# PixelSize settings

