# Generated by Configurator on Sat Jun 11 21:19:10 CST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,TIScope,NikonTI,TIScope
Device,EpiShutter,NikonTI,TIEpiShutter
Device,DiaLamp,NikonTI,TIDiaLamp
Device,NosePiece,NikonTI,TINosePiece
Device,CondenserCassette,NikonTI,TICondenserCassette
Device,FilterBlock1,NikonTI,TIFilterBlock1
Device,LightPath,NikonTI,TILightPath
Device,ZDrive,NikonTI,TIZDrive
Device,PFSOffset,NikonTI,TIPFSOffset
Device,PFSStatus,NikonTI,TIPFSStatus
Device,TUCam,TUCam,TUCam
Device,Spectra,LumencorSpectra,Spectra

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,Spectra,Port,COM5
Property,Spectra,SetLE_Type,Spectra

# Pre-init settings for COM ports

# Hub (parent) references
Parent,EpiShutter,TIScope
Parent,DiaLamp,TIScope
Parent,NosePiece,TIScope
Parent,CondenserCassette,TIScope
Parent,FilterBlock1,TIScope
Parent,LightPath,TIScope
Parent,ZDrive,TIScope
Parent,PFSOffset,TIScope
Parent,PFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,TUCam
Property,Core,Focus,PFSOffset
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# NosePiece
Label,NosePiece,5,6-Unknown
Label,NosePiece,4,5-Plan 40x NA 0.65 Dry
Label,NosePiece,3,4-Unknown
Label,NosePiece,2,3-Plan Apo 100x NA 1.45 Oil
Label,NosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,NosePiece,0,1-Plan Apo 60x NA 1.40 Oil
# CondenserCassette
Label,CondenserCassette,4,5-Ph3
Label,CondenserCassette,3,4-Ph2
Label,CondenserCassette,2,3-Ph1
Label,CondenserCassette,1,2-PhL
Label,CondenserCassette,0,1-A
# FilterBlock1
Label,FilterBlock1,5,6-RED
Label,FilterBlock1,4,5-YFPHQ
Label,FilterBlock1,3,4-HqTRI
Label,FilterBlock1,2,3-FITC
Label,FilterBlock1,1,2-DAPI
Label,FilterBlock1,0,1------
# LightPath
Label,LightPath,3,4-Left80
Label,LightPath,2,3-Right100
Label,LightPath,1,2-Left100
Label,LightPath,0,1-Eye100

# Configuration presets
# Group: BF
# Preset: 4X
ConfigGroup,BF,4X,EpiShutter,State,0
ConfigGroup,BF,4X,DiaLamp,ComputerControl,On
ConfigGroup,BF,4X,DiaLamp,Intensity,12
ConfigGroup,BF,4X,DiaLamp,State,0
ConfigGroup,BF,4X,NosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,BF,4X,NosePiece,State,1
ConfigGroup,BF,4X,CondenserCassette,Label,2-PhL
ConfigGroup,BF,4X,CondenserCassette,State,1
ConfigGroup,BF,4X,FilterBlock1,Label,6-RED
ConfigGroup,BF,4X,FilterBlock1,State,5
ConfigGroup,BF,4X,LightPath,Label,3-Right100
ConfigGroup,BF,4X,LightPath,State,2
ConfigGroup,BF,4X,PFSOffset,Position,0.0000
ConfigGroup,BF,4X,PFSStatus,State,Off
ConfigGroup,BF,4X,TUCam,Exposure,9.9990
ConfigGroup,BF,4X,TUCam,Output Trigger Edge Mode,Rising
ConfigGroup,BF,4X,TUCam,Output Trigger Port,1
ConfigGroup,BF,4X,TUCam,SaveImage,RAW
ConfigGroup,BF,4X,TUCam,Trigger Exposure Mode,Width
ConfigGroup,BF,4X,TUCam,Trigger Mode,Standard
ConfigGroup,BF,4X,Spectra,Blue_Enable,0
ConfigGroup,BF,4X,Spectra,Blue_Level,0
ConfigGroup,BF,4X,Spectra,Cyan_Enable,0
ConfigGroup,BF,4X,Spectra,Cyan_Level,0
ConfigGroup,BF,4X,Spectra,Green_Enable,0
ConfigGroup,BF,4X,Spectra,Green_Level,0
ConfigGroup,BF,4X,Spectra,Red_Enable,0
ConfigGroup,BF,4X,Spectra,Red_Level,0
ConfigGroup,BF,4X,Spectra,State,0
ConfigGroup,BF,4X,Spectra,Teal_Enable,0
ConfigGroup,BF,4X,Spectra,Teal_Level,0
ConfigGroup,BF,4X,Spectra,Violet_Enable,0
ConfigGroup,BF,4X,Spectra,Violet_Level,0
ConfigGroup,BF,4X,Spectra,White_Enable,0
ConfigGroup,BF,4X,Spectra,White_Level,5
ConfigGroup,BF,4X,TUCam,Gain,HDR
ConfigGroup,BF,4X,TUCam,Output Trigger Kind,Global Exposure
ConfigGroup,BF,4X,TUCam,Trigger Edge Mode,Rising



# PixelSize settings

